PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'../results/%s_%s_run%s_%s' % (expInfo['participant'], expName, expInfo['run'], expInfo['date'])
  Experiment info = {'participant': 'pilot01', 'run': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1536, 960]
  expName = auditory_semantic_1back_pilot
  keyboardBackend = ioHub
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Routines
  Routine setup
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    CodeComponent setup_code
      Code Type = Py
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      Begin Experiment:
        from psychopy import core, logging

        # global clock for logging
        globalClock = core.Clock()
        logging.setDefaultClock(globalClock)

        # run-level clock
        runClock = core.Clock()
  Routine instr_1_text
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    TextComponent instr_1_text_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.4
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      text [set every repeat]:
        Za chwilę rozpocznie się badanie.

        Będziesz słuchać nagrań pojedynczych słów oraz szumu.

        W zależności od rodzaju bodźców:
        – porównasz przedmioty konkretne,
        – porównasz pojęcia abstrakcyjne,
        – albo zareagujesz na szum.

        Naciśnij dowolny przycisk, aby zobaczyć to schematycznie.
    KeyboardComponent instr_1_text_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr_1_schema
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    ImageComponent instr_1_schema_image
      image = resources/instructions/instr_1_schema.png
      pos = (0, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent textinstr_1_schema_text
      letterHeight = 0.05
      pos = (0, -0.20)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Usłyszysz nagrania słów jedno po drugim.

        Każde późniejsze słowo porównujesz z poprzednim.

        Po usłyszeniu podejmujesz decyzję
        LEWYM lub PRAWYM przyciskiem.

        Naciśnij dowolny przycisk, aby zobaczyć przykłady.
    KeyboardComponent instr_1_schema_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2_CON
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    ImageComponent instr_2_CON_image
      image = resources/instructions/instr_2_CON.png
      pos = (0, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instr_2_CON_text
      letterHeight = 0.05
      pos = (0, -0.20)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        „krzesło” → „szafa”

        Odpowiedz intuicyjnie: Czy późniejszy przedmiot (szafa) jest
        MNIEJSZE (LEWY) czy WIĘKSZE (PRAWY)
        od poprzedniego przedmiotu (krzesło)?

        Naciśnij dowolny przycisk, aby kontynuować.
    KeyboardComponent instr_2_CON_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2_ABS
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    ImageComponent instr_2_ABS_image
      image = resources/instructions/instr_2_ABS.png
      pos = (0, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instr_2_ABS_text
      letterHeight = 0.05
      pos = (0, -0.20)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        „przyjaźń” → „pieniądze”

        Odpowiedz intuicyjnie: Czy późniejsze pojęcie (pieniądze) jest
        MNIEJ WAŻNE (LEWY) czy WAŻNIEJSZE (PRAWY)
        od poprzedniego pojęcia (przyjaźń)?

        Naciśnij dowolny przycisk, aby kontynuować.
    KeyboardComponent instr_2_ABS_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2_BASE
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    ImageComponent instr_2_BASE_image
      image = resources/instructions/instr_2_BASE.png
      pos = (0, 0.25)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instr_2_BASE_text
      letterHeight = 0.05
      pos = (0, -0.20)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Tu usłyszysz różne nagrania szumu,
        które nie są konkretnymi słowami.

        Naciśnij DOWOLNY przycisk (LEWY lub PRAWY),
        gdy skończy się nagranie.

        Naciśnij dowolny przycisk, aby kontynuować.
    KeyboardComponent instr_2_BASE_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_3
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    TextComponent instr_3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Badanie składa się z kilku krótkich bloków.

        Po każdym nagraniu pojawi się krótkie przypomnienie,
        który przycisk należy nacisnąć.

        Nie zastanawiaj się długo nad poprawną odpowiedzią,
        tylko odpowiadaj szybko i intuicyjnie.

        Badanie potrwa około 10 minut.

        Naciśnij dowolny przycisk, aby rozpocząć badanie.
    KeyboardComponent instr_3_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_for_trigger
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    CodeComponent trigger_code
      Code Type = Py
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      Begin Routine:
        # manual run selection from the startup dialog
        run_id = int(expInfo["run"])

        # choose conditions file for blocks loop
        if run_id == 1:
            blocks_file = "resources/lists/blocks_run1.csv"
        elif run_id == 2:
            blocks_file = "resources/lists/blocks_run2.csv"
        else:
            raise ValueError("expInfo['run'] must be 1 or 2.")

        runClock.reset()
    KeyboardComponent trigger_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent wait_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Oczekiwanie na skaner.
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  Routine baseline_fixation
    RoutineSettingsComponent baseline_fixation
      stopVal [duration (s)] = 6.0
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    TextComponent fix_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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  Routine block_start
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    CodeComponent block_start_code
      Code Type = Py
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      Begin Experiment:
        block_instruction = ""
      Begin Routine:
        # reset run clock (first block only)
        if blocks.thisN == 0:
            runClock.reset()

        # block onset (time since start of run)
        block_onset = runClock.getTime()

        import io
        import re

        # load instruction texts
        if 'instr_dict' not in globals():
            raw = io.open("resources/instructions/instr_pl.txt", encoding="utf-8").read()
            parts = re.split(
                r'^\[(GENERAL_1|GENERAL_2|GENERAL_3|CON|ABS|BASE)\]\s*$',
                raw,
                flags=re.MULTILINE
            )
            globals()['instr_dict'] = {
                parts[i]: parts[i + 1].strip()
                for i in range(1, len(parts), 2)
            }

        # block identifiers
        block_id = blocks.thisN + 1
        run_id = int(expInfo["run"])

        # instruction text for this block
        block_instruction = globals()['instr_dict'].get(
            block_type,
            "BŁĄD: brak instrukcji dla bloku."
        )

        # select trials file for this block
        if block_type == "CON":
            trials_file = f"resources/lists/con_run{run_id}.csv"
        elif block_type == "ABS":
            trials_file = f"resources/lists/abs_run{run_id}.csv"
        else:
            trials_file = f"resources/lists/base_run{run_id}.csv"
      End Routine:
        thisExp.addData("block_onset", block_onset)
    TextComponent block_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6.0
      text [set every repeat] = $block_instruction
      units = height
      wrapWidth = 1.2
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  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 3.0
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    CodeComponent trial_timing
      Code Type = Py
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      Begin Routine:
        # reset response container for this trial
        resp.keys = None
        resp.rt = None

        # IDs (run is chosen manually in the dialog)
        run_id = int(expInfo["run"])
        block_id = blocks.thisN + 1

        # trial counters
        trial_index0 = trials.thisN
        trial_index1 = trial_index0 + 1
        is_first_in_block = int(trial_index0 == 0)

        # time since start of run
        trial_onset = runClock.getTime()

        # prompt text depends on block type
        if block_type == "CON":
            resp_prompt_text = "MNIEJSZY  ←        →  WIĘKSZY"
        elif block_type == "ABS":
            resp_prompt_text = "MNIEJ WAŻNE  ←        →  WAŻNIEJSZE"
        else:
            resp_prompt_text = "DOWOLNY PRZYCISK"

        # store a copy of the filename actually used
        stim_file_used = stimFile

        # save to CSV
        thisExp.addData("trial_onset", trial_onset)
        thisExp.addData("block_onset", block_onset)
        thisExp.addData("trial_index1", trial_index1)
        thisExp.addData("is_first_in_block", is_first_in_block)
        thisExp.addData("stim_file_used", stim_file_used)
        thisExp.addData("resp_prompt_text", resp_prompt_text)
    TextComponent fixation
      letterHeight = 0.08
      pos = (0.0, 0)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      text [set every repeat] = +
      units = height
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    SoundComponent stim_sound
      hamming = False
      sound [set every repeat] = $stimFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent resp_prompt
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 3.0
      text [set every repeat] = $resp_prompt_text
      units = height
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    KeyboardComponent resp
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 3.0
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  Routine end
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        run_id = int(expInfo["run"])

        if run_id == 1:
            end_message = (
                "Jesteśmy w połowie badania.\n\n\n"
                "Aby kontynuować, naciśnij dowolny przycisk."
            )
        #else:
        #    end_message = (
        #        "To koniec badania.\n"
        #        "Dziękuję za udział!\n\n"
        #        "Aby zakończyć, naciśnij dowolny przycisk."
        #    )
        #
        if int(expInfo["run"]) == 2:
            endExpNow = True
    TextComponent end_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_message
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    KeyboardComponent end_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine instr_1_text
  Routine instr_1_schema
  Routine instr_2_CON
  Routine instr_2_ABS
  Routine instr_2_BASE
  Routine instr_3
  Routine wait_for_trigger
  Routine baseline_fixation
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocks_file
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'CON')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'CON')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'CON')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'CON')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'CON')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'CON')])]
    Routine block_start
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trials_file
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
